PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = 2_SignalDetection
  keyboardBackend = ioHub
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Routines
  Routine images
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    ImageComponent image
      image [set every repeat] = $Images
      pos = (0, 0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Happy","Sad","Angry","Horror"
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      styles = slider
      ticks = (1, 2, 3, 4)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Images_Aritro.xlsx
    loopType = sequential
    nReps = 25
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    conditions:
      [{'Images': 'C:\\Users\\aritr\\OneDrive\\Desktop\\psychopy images\\sad image.jpg'},
      {'Images': 'C:\\Users\\aritr\\OneDrive\\Desktop\\psychopy images\\happy image.jpg'},
      {'Images': 'C:\\Users\\aritr\\OneDrive\\Desktop\\psychopy images\\angry image.jpg'},
      {'Images': 'C:\\Users\\aritr\\OneDrive\\Pictures\\horrir pic.jpg'}]
    Routine images
  LoopTerminator trials
